PsychoPy2experiment version="2024.2.1post4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  color = -1.0000, -1.0000, -1.0000
  expName = solo.final
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 0
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Routines
  Routine trial
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  Routine welcomeroutine
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    TextComponent instructionText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You are about to see a series of characters.

        If the characters make up a word,
        press the RIGHT arrow key.

        If the characters do not make up a word,
        press the LEFT arrow key.

        Press SPACE to begin.
    KeyboardComponent start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine condition
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $characters
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $answer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine thanks
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thank You for Participating!
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcomeroutine
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = solo.final.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'characters': 'cat', 'isword': 1, 'answer': 'right'},
      {'characters': 'bloop', 'isword': 0, 'answer': 'left'},
      {'characters': 'tort', 'isword': 1, 'answer': 'right'},
      {'characters': 'glop', 'isword': 0, 'answer': 'left'},
      {'characters': 'mib', 'isword': 0, 'answer': 'left'},
      {'characters': 'tsunami', 'isword': 1, 'answer': 'right'},
      {'characters': 'bright', 'isword': 1, 'answer': 'right'},
      {'characters': 'zorp', 'isword': 0, 'answer': 'left'},
      {'characters': 'brave', 'isword': 1, 'answer': 'right'},
      {'characters': 'shook', 'isword': 1, 'answer': 'right'},
      {'characters': 'snorfle', 'isword': 0, 'answer': 'left'},
      {'characters': 'squirrel ', 'isword': 1, 'answer': 'right'},
      {'characters': 'quonkle', 'isword': 0, 'answer': 'left'},
      {'characters': 'blunket', 'isword': 0, 'answer': 'left'},
      {'characters': 'serenity', 'isword': 1, 'answer': 'right'}]
    Routine condition
  LoopTerminator trials
  Routine thanks
